PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = -1.0000, -1.0000, -1.0000
  expName = active
  keyboardBackend = ioHub
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Routines
  Routine start_visual
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Start Visual Reaction Test

        Press Space when you see change of color

        (press Enter to Start)
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine active_visual
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    CodeComponent code_change
      Code Type = Py
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      Before Experiment:
        import random
      Begin Experiment:
        currentColor = 'green'  # Initial color
        changeTime = random.uniform(1.0, 3.0)  # Initial random time for the first change
        lastChangeTime = 0
        init_routine = True
        print(f'change time: {changeTime}')
      Begin Routine:
        color_switched = False
        if not init_routine:
            if currentColor == 'green':
                currentColor = 'red'
            else:
                currentColor = 'green'
        else:
            init_routine = False
      Each Frame:
        if not color_switched and t - lastChangeTime >= changeTime:
            if currentColor == 'green':
                currentColor = 'red'
            else:
                currentColor = 'green'
            lastChangeTime = t
            print(lastChangeTime)
            changeTime = random.uniform(1.0, 3.0)
            color_switched = True
    PolygonComponent background
      fillColor [set every frame] = $currentColor
      lineColor [set every frame] = $currentColor
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine start_visual
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine active_visual
  LoopTerminator trials
